PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = ax-cpt
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Routines
  Routine TCI
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $PreCueTime
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      text:
        +
  Routine CUE
    TextComponent CueStimulus
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $Cue
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    KeyboardComponent CueResponse
      allowedKeys = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
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    TextComponent PreTargetFixation
      color = black
      letterHeight = 0.1
      startVal [time (s)] = .5
      stopVal [duration (s)] = $ISI
      text = + + +
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  Routine CTI
  Routine TARGET
    TextComponent ProbetStimulus
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Probe
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    KeyboardComponent ProbeResponse
      allowedKeys = '1','2'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
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    CodeComponent ForceLoopEnds
      Code Type = Py
      End Routine:
        ## force dummy loops to end
        subTrial.finished = True
        timingLoop.finished = True

        ## force dummy loops to save out the condition codes
        subTrial.addData('ISI', ISI)
        subTrial.addData('PreCueTime', PreCueTime)
        subTrial.addData('Probe', Probe)
        subTrial.addData('Cue', Cue)

        ## i'm using this to control number of trials for development
        trialThreshold = 5
        count += 1
        if count == trialThreshold:
            trialLoop.finished = True
  Routine start0
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        count = 0
    TextComponent Welcome
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Try to relax and find a comfortable, neutral position before we begin.

        Press the space bar to continue.
    KeyboardComponent moreInstructions0
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start1
    TextComponent basicOverview
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task, you will be responding to pairs of letters as quickly and accurately as possible.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start2
    TextComponent basicOverview1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will:

        - See a first letter presented in the center of the screen
        - Wait during a long pause
        - See a second letter presented in three positions across the middle of the display

        You should respond to each letter.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start3
    TextComponent basicOverview2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Your main objective is to detect the letter pair "A-X".

        For each pair of letters:

        - Always press button 1 when the first letter appears

        - For the second letter, if and only if the second letter you see on the screen is an X, and the previous letter was an A, press button 2.

        If you do not see the A-X pair, you should:

        - Press button 1 when the first letter appears

        - Press button 1 if the second letter you see does not complete the A-X pair
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start4
    TextComponent basicOverview3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In some instances, the second letter will not be a letter at all, but a number.

        In these cases, do not press either button 1 or 2. Simply wait for the number to disappear.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start5
    TextComponent basicOverview4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You only have 1 second to respond to each letter, so you should respond as quickly and accurately as possible.

        You may still make a response even if the letter disappears off the screen.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start6
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        blockStart = 0
    TextComponent examples
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Here are a few examples to help you understand the task.

        First trial: You see an A, there is a long delay, you see an X.
        You should press button 1 when the A appears,
        and button 2 when the X appears.

        Second trial: You see a B, there is a long delay, you see an X.
        You should press button 1 when the B appears,
        and button 1 when the X appears.

        Third trial: You see an A, there is a long delay, you see a 6.
        You should press button 1 when the A appears, and not respond at all when you see the 6.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blockStart
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if blockStart:
            presentText = "You may now take a short rest break.\n\nPress Space Bar to continue."
        else:
            presentText = "In this section of the experiment, you will be asked to perform five task blocks.\n\nBetween blocks you will have the opportunity to take a short break."
            blockStart = 1
    TextComponent blockStartInstructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $presentText
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ITI
  Routine PreCue
    TextComponent PreCueFixation
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $PreCueTime
      text = +
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  Routine allDone
    TextComponent itsAllOver
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This concludes the experiment.

        Thanks for participating!
Flow
  Routine start0
  Routine start1
  Routine start2
  Routine start3
  Routine start4
  Routine start5
  Routine start6
  LoopInitiator blockLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 5
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    Routine blockStart
    LoopInitiator trialLoop loopType="TrialHandler"
      conditionsFile = conditions/GlobalConditions.xlsx
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AYListBas1Pro2Rea1.xlsx'), ('TrialType', 'AY'), ('CorrRespTarget', 1.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AYListBas1Pro2Rea1.xlsx'), ('TrialType', 'AY'), ('CorrRespTarget', 1.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AYListBas1Pro2Rea1.xlsx'), ('TrialType', 'BX'), ('CorrRespTarget', 1.0), ('CorRespCue', 1)])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
      LoopInitiator timingLoop loopType="TrialHandler"
        conditionsFile = conditions\trialTiming.xlsx
        isTrials = False
        loopType = fullRandom
        nReps = 1
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        conditions:
          [OrderedDict([('PreCueTime', 1.0), ('ISI', 2)]),
          OrderedDict([('PreCueTime', 1.0), ('ISI', 6)]),
          OrderedDict([('PreCueTime', 0.5), ('ISI', 2)]),
          OrderedDict([('PreCueTime', 0.5), ('ISI', 6)])]
        Routine PreCue
        LoopInitiator subTrial loopType="TrialHandler"
          conditionsFile = $ConditionFile
          isTrials = False
          loopType = fullRandom
          nReps = 1
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          Routine CUE
          Routine TARGET
        LoopTerminator subTrial
      LoopTerminator timingLoop
    LoopTerminator trialLoop
  LoopTerminator blockLoop
  Routine allDone
